PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'gender': 'w', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = 3D_Block_Design
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Routines
  Routine Instruction_3D
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Die folgenden Figuren müssen verglichen werden. Überlappen die Figuren durch Drehung vollständig, dann drücken Sie die Pfeiltaste nach OBEN, wenn nicht drücken Sie die Pfeiltaste nach UNTEN.

        Zum Fortfahren bitte die LEERTASTE drücken.
    KeyboardComponent key_resp_instr_3D
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_3D
    PolygonComponent fix_point_3D
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      units = norm
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    StaticComponent ISI_3D
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine code
  Routine trial_3D
    ImageComponent image_3D
      image [set during: fixation_3D.ISI_3D] = $'Stimuli_3D\\conditions\\'+str(im_file_3D)
      ori [set every frame] = 45*t+180
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3D
      allowedKeys = 'up', 'down'
      correctAns = $corAns_3D
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if resp.corr:
            msg = "Correct!"
            else:
                msg = "wrong"



        # track last 10 trials
        corr.append(resp.corr)
        nCorr = sum(corr[-10:])
        nResps = len(corr[[-10:])

        msg += "({} out of {} correct)".format(nCorr,nResps)
    TextComponent feedback_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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  Routine Trail_2D
    MouseComponent mouse_2D
      clickable = correct_image_2D
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent correct_image_2D
      image [set during: ITI_Fixation_2D.ISI_2D] = $'Stimuli_2D\correct'+str(target_no)+'.png'
      pos = $pos_correct
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        target_no = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]
      Begin Routine:
        #random Positions

        if random() > 0.5:
            pos_correct = [-0.5, -0.5] #on the left
            pos_wrong = [0.5,-0.5]
        else:
            pos_correct = [0.5,-0.5]
            pos_wrong = [-0.5,-0,5]
    ImageComponent wrong_image_2D
      image [set during: ITI_Fixation_2D.ISI_2D] = $'Stimuli_2D\wrong'+str(target_no)+'.png'
      pos = $pos_wrong
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent target_image_2D
      image [set during: ITI_Fixation_2D.ISI_2D] = $'Stimuli_2D\target'+str(target_no)+'.png'
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine fixation_2D
    PolygonComponent Fixation_Dot_2D
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    StaticComponent ISI_2D
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = True
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  Routine Instruction_2D
    TextComponent instruction_text_2D
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Die obere Abbildung überlappt vollständig mit einer der beiden unteren. Finden Sie die passende Abbildung und klicken Sie sie mit der Maus an.

        Zum Fortfahren bitte LERTASTE drücken.
    KeyboardComponent key_instr_2D
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    ImageComponent im_instr_2D
      image = Stimuli_2D\target1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent im_instr_2D_2
      image = Stimuli_2D\correct1.png
      pos = (0.25, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent im_instr_2D_3
      image = Stimuli_2D\wrong1.png
      pos = (-0.25, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
  Routine instruction_2D
    TextComponent instr_head
      languageStyle = RTL
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Instructions
        You will see three objects. You need to decide which one of the bottom two images matches the top one. When decided, you need to click thee matching one with the mouse
    TextComponent instr_example
      letterHeight = 0.1
      pos = (0.4, -0.25)
      startVal [time (s)] = 0.0
      text = Match this one to one of the bottom. The left red figure is the correct one.
      units = norm
      wrapWidth = 0.8
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    TextComponent instr_tail
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press SPACE to start
      units = norm
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent instr_image
      image = Stimuli_2D\Instr_image.png
      pos = (-0.4, -0.3)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Trial_2D
    MouseComponent mouse_2D_2
      clickable = correct_image_2D
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent correct_image_2D_2
      image [set during: fixation_2D.ISI_2D] = $'Stimuli_2D\correct'+str(target_no)+'.png'
      pos = $pos_correct
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        target_no = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]
      Begin Routine:
        #random Positions

        if random() > 0.5:
            pos_correct = [-0.5, -0.5] #on the left
            pos_wrong = [0.5,-0.5]
        else:
            pos_correct = [0.5,-0.5]
            pos_wrong = [-0.5,-0,5]
    ImageComponent wrong_image_2D_2
      image [set during: fixation_2D.ISI_2D] = $'Stimuli_2D\wrong'+str(target_no)+'.png'
      pos = $pos_wrong
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent target_image_2D_2
      image [set during: fixation_2D.ISI_2D] = $'Stimuli_2D\target'+str(target_no)+'.png'
      pos = (0, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine instruction_2D
  LoopInitiator trials_2D loopType="TrialHandler"
    conditionsFile = cond_Datei_2D_2.csv
    loopType = random
    nReps = 1
    random seed = 15
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    conditions:
      [OrderedDict([('target_no', 1), ('target_2D', 'Stimuli_2D\\\\target1.png'), ('correct_2D', 'Stimuli_2D\\\\correct1.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong1.png')]),
      OrderedDict([('target_no', 2), ('target_2D', 'Stimuli_2D\\\\target2.png'), ('correct_2D', 'Stimuli_2D\\\\correct2.png'), ('wrong_2D', 'Stimuli_2D\\\\wrongt2.png')]),
      OrderedDict([('target_no', 3), ('target_2D', 'Stimuli_2D\\\\target3.png'), ('correct_2D', 'Stimuli_2D\\\\correct3.png'), ('wrong_2D', 'Stimuli_2D\\wrong3.png')]),
      OrderedDict([('target_no', 4), ('target_2D', 'Stimuli_2D\\\\target4.png'), ('correct_2D', 'Stimuli_2D\\\\correct4.png'), ('wrong_2D', 'Stimuli_2D\\wrong4.png')]),
      OrderedDict([('target_no', 5), ('target_2D', 'Stimuli_2D\\\\target5.png'), ('correct_2D', 'Stimuli_2D\\\\correct5.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong5.png')]),
      OrderedDict([('target_no', 6), ('target_2D', 'Stimuli_2D\\\\target6.png'), ('correct_2D', 'Stimuli_2D\\\\correct6.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong6.png')]),
      OrderedDict([('target_no', 7), ('target_2D', 'Stimuli_2D\\\\target7.png'), ('correct_2D', 'Stimuli_2D\\\\correct7.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong7.png')]),
      OrderedDict([('target_no', 8), ('target_2D', 'Stimuli_2D\\\\target8.png'), ('correct_2D', 'Stimuli_2D\\\\correct8.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong8.png')]),
      OrderedDict([('target_no', 9), ('target_2D', 'Stimuli_2D\\\\target9.png'), ('correct_2D', 'Stimuli_2D\\\\correct9.png'), ('wrong_2D', 'Stimuli_2D\\\\wrong9.png')])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
    Routine fixation_2D
    Routine Trial_2D
  LoopTerminator trials_2D
  Routine Instruction_3D
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $'blockOrder'+ expInfo['group'] +'.csv'
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_3D loopType="TrialHandler"
      Selected rows = 17:20
      conditionsFile = $block + '.csv'
      loopType = random
      nReps = 1
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      Routine fixation_3D
      Routine trial_3D
    LoopTerminator trials_3D
  LoopTerminator blocks
