PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = 2D_3D_Experiment
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Routines
  Routine instructions_2D
  Routine ITI_Fixation_2D
    PolygonComponent fixation_point
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent images_2D
      image [set every repeat] = $'Stimuli_2D/target'+ str(target_no) + '.png'
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
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  Routine trial_2D
    ImageComponent twoD_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    MouseComponent mouse_res_2D
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine instructions_3D
  Routine ITI_fixation_3D
  Routine trial_3D
    ImageComponent images_3D
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    KeyboardComponent key_resp_3D
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback_3D
    CodeComponent feedbackMsg
      Code Type = Auto->JS
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      Begin Experiment:
        lastAnswers = []
      Begin Routine:
        # dreate feedback message for last 10 answers

        if resp.corr.:
            #display message
            msg += f'\n {nCorr}/10 richtig!'


        # append responses to list

        lastAnswers.append(resp.corr)
        nCorr = sum(lastAnswers[-10:])
    TextComponent feedback_text_3D
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] =  ' msg von 10 Antworten richtig'
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Flow
  Routine instructions_2D
  LoopInitiator trials_2D loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine ITI_Fixation_2D
    Routine trial_2D
  LoopTerminator trials_2D
  Routine instructions_3D
  LoopInitiator blocks_3D loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials_3D loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine ITI_fixation_3D
      Routine trial_3D
      Routine feedback_3D
    LoopTerminator trials_3D
  LoopTerminator blocks_3D
