PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'gender': 'w', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = 3D_Block_Design
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Routines
  Routine Instruction_3D
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Die folgenden Figuren müssen verglichen werden. Überlappen die Figuren durch Drehung vollständig, dann drücken Sie die Pfeiltaste nach OBEN, wenn nicht drücken Sie die Pfeiltaste nach UNTEN.

        Zum Fortfahren bitte die LEERTASTE drücken.
    KeyboardComponent key_resp_instr_3D
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_3D
    PolygonComponent fix_point_3D
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      units = norm
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    StaticComponent ISI_3D
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine code
  Routine trial_3D
    ImageComponent image_3D
      image [set during: fixation_3D.ISI_3D] = $'Stimuli_3D\\conditions\\'+str(im_file_3D)
      ori [set every frame] = 45*t+180
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3D
      allowedKeys = 'up', 'down'
      correctAns = $corAns_3D
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine Instruction_3D
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $'blockOrder'+ expInfo['group'] +'.csv'
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_3D loopType="TrialHandler"
      Selected rows = 17:20
      conditionsFile = $block + '.csv'
      loopType = random
      nReps = 1
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      Routine fixation_3D
      Routine trial_3D
    LoopTerminator trials_3D
  LoopTerminator blocks
  Routine code
